PsychoPy2experiment version="2024.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = cm
  Window size (pixels) = [1707, 1067]
  clockFormat = iso
  color = 1.0000, 1.0000, 1.0000
  expName = 线索效应-AL
  frameRate = 60
  keyboardBackend = PsychToolbox
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      text = 按空格键开始
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    KeyboardComponent resp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cue
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    PolygonComponent arrow
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 0
      opacity [set every repeat] = arrow_onset
      ori [set every repeat] = (90+180*dir)
      pos [set every repeat] = (0,0)
      shape = arrow
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
      units = cm
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    PolygonComponent neutral
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = neutral_onset
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      units = cm
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    TextComponent SOA_interval
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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    TextComponent TestText_3
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      letterHeight = .4
      pos = (-5, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .9
      text [set every repeat] = $"trial_id:"+str(trial_id)+"\ngroup (0=窄范围组,1=宽范围组): "+str(group)+"\narrow_onset (0=no,1=yes):" +str(arrow_onset)+"\ndir (0=right,1=left):" +str(dir)+"\nneutral_onset (0=no,1=yes): "+str(neutral_onset)+"\nangle（D={-60，-30, 0, 30, 60}）: "+str(angle)+"\ncatch (0=no,1=yes): "+str(catch)
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    KeyboardComponent resp_adv
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .9
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    TextComponent fix_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2.9
      text = +
      units = cm
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    PolygonComponent polygon_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = (1-catch)
      pos [set every repeat] = ((1-2*dir)*8*np.cos(angle*np.pi/180), 8*np.sin(angle*np.pi/180))
      saveStartStop = False
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 2
      units = cm
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    KeyboardComponent targetRT_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 2
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  Routine interval_1
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    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = interval
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  Routine stimu
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    TextComponent fix_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = +
      units = cm
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    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = (1-catch)
      pos [set every repeat] = ((1-2*dir)*8*np.cos(angle*np.pi/180), 8*np.sin(angle*np.pi/180))
      saveStartStop = False
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent targetRT
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      disabled = True
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      Each Frame:
        currentTime = routineTimer.getTime()
        #if catch == 1:
        if currentTime >= 2:
           continueRoutine = False
    TextComponent TestText_2
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      letterHeight = .4
      pos = (-5, 3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every frame] = $"trial_id:"+str(trial_id)+"\ngroup (0=窄范围组,1=宽范围组): "+str(group)+"\narrow_onset (0=no,1=yes):" +str(arrow_onset)+"\ndir (0=right,1=left):" +str(dir)+"\nneutral_onset (0=no,1=yes): "+str(neutral_onset)+"\nangle（D={-60，-30, 0, 30, 60}）: "+str(angle)+"\ncatch (0=no,1=yes): "+str(catch)+"\ntime:"+str(currentTime)
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  Routine routine_1
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        感谢您的参与！
        按“空格“退出实验
    KeyboardComponent resp_quit
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine interval_2
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    TextComponent rest1
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent TestText_4
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      letterHeight = 0.4
      pos = (-5, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $"trial_id:"+str(trial_id)+"\ngroup (0=窄范围组,1=宽范围组): "+str(group)+"\narrow_onset (0=no,1=yes):" +str(arrow_onset)+"\ndir (0=right,1=left):" +str(dir)+"\nneutral_onset (0=no,1=yes): "+str(neutral_onset)+"\nangle（D={-60，-30, 0, 30, 60}）: "+str(angle)+"\ncatch (0=no,1=yes): "+str(catch)
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  Routine pre_cue
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    TextComponent fix_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent TestText
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      letterHeight = .4
      pos = (-5, 3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $"trial_id:"+str(trial_id)+"\ngroup (0=窄范围组,1=宽范围组): "+str(group)+"\narrow_onset (0=no,1=yes):" +str(arrow_onset)+"\ndir (0=right,1=left):" +str(dir)+"\nneutral_onset (0=no,1=yes): "+str(neutral_onset)+"\nangle（D={-60，-30, 0, 30, 60}）: "+str(angle)+"\ncatch (0=no,1=yes): "+str(catch)
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  Routine 指导语
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    TextComponent instruction
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.4
      startVal [time (s)] = 0.0
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      text:
        欢迎参与实验！

        实验开始后屏幕中心将出现“+”注视点

        然后中心注视点变为“←”、“→”或“矩形”

        实验期间可以视线可自由移动！

        箭头或矩形消失一段时间后，屏幕两边呈现一个圆点

        箭头方向指示圆点方向，矩形不指示圆点方向

        你需要在圆点出现后【尽快】按下“空格”键

        实验设有检测试次，屏幕将不出现圆点，检测试次中【无需】按键

        两实验试次中间间隔1.5秒

        请注意：
        实验全程请使用【右手】进行按键！

        有任何问题请联系主试解答！
        正式实验开始前，请确保完全理解实验要求！

        按“空格”键，你将看到圆点可能出现的位置
        确认后按“空格”键进入练习阶段，练习结束后进入正式实验
    KeyboardComponent continue1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine interval_3
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    TextComponent fix_2
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine 指导语2
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    TextComponent fix_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = .4
      startVal [time (s)] = 0.0
      text = 按“空格”开始正式实验
      units = cm
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine
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  Routine 刺激范围展示60
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    PolygonComponent polygon_r60
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1-2)*8*np.cos(60*np.pi/180), 8*np.sin(60*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent polygon_r30
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1-2)*8*np.cos(30*np.pi/180), 8*np.sin(30*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent polygon_r0
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1-2)*8*np.cos(0*np.pi/180), 8*np.sin(0*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent polygon_rm30
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1-2)*8*np.cos(-30*np.pi/180), 8*np.sin(-30*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent polygon_rm60
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1-2)*8*np.cos(-60*np.pi/180), 8*np.sin(-60*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent polygon_l60
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1)*8*np.cos(60*np.pi/180), 8*np.sin(60*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent polygon_l30
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1)*8*np.cos(30*np.pi/180), 8*np.sin(30*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent polygon_l0
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1)*8*np.cos(0*np.pi/180), 8*np.sin(0*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent polygon_lm30
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1)*8*np.cos(-30*np.pi/180), 8*np.sin(-30*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent polygon_lm60
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1)*8*np.cos(-60*np.pi/180), 8*np.sin(-60*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine 刺激范围展示30
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    PolygonComponent polygon_r30_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1-2)*8*np.cos(30*np.pi/180), 8*np.sin(30*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent polygon_r0_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1-2)*8*np.cos(0*np.pi/180), 8*np.sin(0*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent polygon_rm30_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1-2)*8*np.cos(-30*np.pi/180), 8*np.sin(-30*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent polygon_l30_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1)*8*np.cos(30*np.pi/180), 8*np.sin(30*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent polygon_l0_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1)*8*np.cos(0*np.pi/180), 8*np.sin(0*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    PolygonComponent polygon_lm30_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      opacity [set every repeat] = 1
      pos [set every repeat] = ((1)*8*np.cos(-30*np.pi/180), 8*np.sin(-30*np.pi/180))
      shape = circle
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = cm
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine 指导语
  Routine 刺激范围展示60
  LoopInitiator train loopType="TrialHandler"
    conditionsFile = 训练参数文件short60.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trial_id': 1, 'group': 2, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 60},
      {'trial_id': 2, 'group': 2, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 30},
      {'trial_id': 3, 'group': 2, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 0},
      {'trial_id': 4, 'group': 2, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': -30},
      {'trial_id': 5, 'group': 2, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': -60},
      {'trial_id': 6, 'group': 2, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 1, 'angle': 60},
      {'trial_id': 7, 'group': 2, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 1, 'angle': 30},
      {'trial_id': 8, 'group': 2, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 1, 'angle': 0},
      {'trial_id': 9, 'group': 2, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 1, 'angle': -30},
      {'trial_id': 10, 'group': 2, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 1, 'angle': -60},
      {'trial_id': 11, 'group': 2, 'catch': 0, 'neutral_onset': 1, 'arrow_onset': 0, 'dir': 0, 'angle': 30},
      {'trial_id': 12, 'group': 2, 'catch': 0, 'neutral_onset': 1, 'arrow_onset': 0, 'dir': 1, 'angle': -30},
      {'trial_id': 13, 'group': 2, 'catch': 1, 'neutral_onset': 1, 'arrow_onset': 0, 'dir': 1, 'angle': -30},
      {'trial_id': 14, 'group': 2, 'catch': 1, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 1, 'angle': -60}]
    Routine interval_2
    Routine pre_cue
    Routine cue
  LoopTerminator train
  Routine 指导语2
  LoopInitiator trial1 loopType="TrialHandler"
    conditionsFile = 宽范围组参数文件.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_id': 1, 'group': 1, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 60},
      {'trial_id': 2, 'group': 1, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 60},
      {'trial_id': 3, 'group': 1, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 60},
      {'trial_id': 4, 'group': 1, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 60},
      {'trial_id': 5, 'group': 1, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 60},
      {'trial_id': 6, 'group': 1, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 60},
      {'trial_id': 7, 'group': 1, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 60},
      {'trial_id': 8, 'group': 1, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 60},
      {'trial_id': 9, 'group': 1, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 60},
      {'trial_id': 10, 'group': 1, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 60},
      {'trial_id': 11, 'group': 1, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 60},
      {'trial_id': 12, 'group': 1, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 60},
      {'trial_id': 13, 'group': 1, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 60},
      {'trial_id': 14, 'group': 1, 'catch': 0, 'neutral_onset': 0, 'arrow_onset': 1, 'dir': 0, 'angle': 60}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
    Routine interval_2
    Routine pre_cue
    Routine cue
  LoopTerminator trial1
  Routine routine_1
